CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch00")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch01")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch02")
    Name to assign these images:Oct6
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch02")
    Name to assign these images:Nanog
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):12,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale: 1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.003,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:20
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    Thresholding method:Otsu

MeasureObjectIntensity:[module_num:6|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
    Hidden:4
    Select an image to measure:DAPI
    Select an image to measure:Nanog
    Select an image to measure:GFP
    Select an image to measure:Oct6
    Select objects to measure:Nuclei

ExportToSpreadsheet:[module_num:7|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Nuclei|Intensity_MeanIntensity_Oct6,Nuclei|Intensity_MeanIntensity_GFP,Nuclei|Intensity_MeanIntensity_DAPI,Nuclei|Intensity_MeanIntensity_Nanog,Image|FileName_DAPI
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:CSD_test1_F
    Overwrite existing files without warning?:No
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